"macro fid_scan"

if (seqfil='info') then
  seqfil='s2pul'
endif

exists('displaymode','parameter'):$isdisplaymode
if (not $isdisplaymode) then
  string('displaymode')
  setgroup('displaymode','display')
  settype('displaymode','flag')
  displaymode = 'r'
endif
setenumeral('displaymode',0)

exists('fidscanmode','parameter'):$isfidscanmode
if (not $isfidscanmode) then
  string('fidscanmode')
  setgroup('fidscanmode','display')
  settype('fidscanmode','flag')
  if (appmode='imaging') then
    fidscanmode = 'af'
  else
    fidscanmode = 'r'
  endif
endif

exists('dcrmv','parameter'):$isdcrmv
if (not $isdcrmv) then
  string('dcrmv')
  setgroup('dcrmv','display')
  settype('dcrmv','flag')
  setenumeral('dcrmv', 2, 'y', 'n')
  dcrmv = 'n'
endif

exists('acqmode','parameter','global'):$isacqmode
if (not $isacqmode) then
  create('acqmode', 'string', 'global')
  acqmode = ''
endif

exists('fidarea','parameter','global'):$isfidarea
if (not $isfidarea) then
  create('fidarea', 'real', 'global')
  setgroup('fidarea','processing','global')
  fidarea = 1000
endif
exists('fidnorm','parameter','global'):$isfidnorm
if (not $isfidnorm) then
  create('fidnorm', 'real', 'global')
  setgroup('fidnorm','processing','global')
  fidnorm = 0.001
endif

$nt=nt
nt=1
on('bs'):$onbs
bs='n'
on('gain'):$ongain
on('gain')
wnt='fid_display'
wexp='fid_scan(1)'
werr=''

acqmode=''
au('silent')
acqmode='fidscan'
exists('wdone','parameter'):$e
if $e>0.5 then
  setvalue('wdone','','current')
  setvalue('wdone','','processed')
endif

if $onbs then on('bs') endif
if (not $ongain) then off('gain') endif
nt=$nt
if ($# = 0) then
  clear(2)
endif
if traymax>0.5 then
  loc='n'
  vnmrjcmd('tray close')
endif
